CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:38
HasImagePlaneDetails:false

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|
    Name of the file:None
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows:No
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    Group images by metadata?:No
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
RunCellpose:[module_num:3|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
    Select the input image:AGP
    Expected object diameter:40
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

IdentifyTertiaryObjects:[module_num:4|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:RNAandER
    Name the output image:FilteredRNA
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:6|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
    Select the input image:FilteredRNA
    Name the output image:SytoNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:SytoNuclei
    Name the primary objects to be identified:Nucleoli
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:Mito
    Name the output image:FilteredMito
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:9|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
    Select the input image:FilteredMito
    Name the output image:MitoCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:MitoCytoplasm
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):5,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:AGP
    Name the output image:FilteredAGP
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:12|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
    Select the input image:FilteredAGP
    Name the output image:AGPCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:AGPCytoplasm
    Name the primary objects to be identified:AGPSpots
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.005,1
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    Log transform before thresholding?:No
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
MeasureColocalization:[module_num:14|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
    Select images to measure:AGP, DNA, Mito, RNAandER
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:AGP, DNA, FilteredAGP, Mito, RNAandER
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:AGPSpots, Cells, Cytoplasm, Mitochondria, Nuclei, Nucleoli
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:CellObjectNeighborCount
    Select colormap:CMRmap
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:NucleiObjectNeighborCount
    Select colormap:CMRmap
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Nucleoli
    Select neighboring objects to measure:Nucleoli
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:NucleoliObjectNeighborCount
    Select colormap:CMRmap
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:AGPSpots
    Select neighboring objects to measure:AGPSpots
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ActinObjectNeighborCount
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:Mitochondria
    Select neighboring objects to measure:Mitochondria
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MitochondriaObjectNeighborCount
    Select colormap:CMRmap
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:22|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
    Select images to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:RNAandER
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:24|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
    Select images to measure:RNAandER
    Select objects to measure:Nucleoli

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:AGP
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:Mito
    Select objects to measure:Cytoplasm, Mitochondria

MeasureGranularity:[module_num:27|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
    Select images to measure:DNA
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureGranularity:[module_num:28|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
    Select images to measure:RNAandER
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureGranularity:[module_num:29|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
    Select images to measure:AGP
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureGranularity:[module_num:30|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
    Select images to measure:Mito
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureTexture:[module_num:31|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
    Select images to measure:DNA
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:32|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
    Select images to measure:RNAandER
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:33|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
    Select images to measure:AGP
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:34|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
    Select images to measure:Mito
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

RelateObjects:[module_num:35|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
    Parent objects:Nuclei
    Child objects:Nucleoli
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjectsNucleiToNucleoli
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
RelateObjects:[module_num:36|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
    Parent objects:Cells
    Child objects:AGPSpots
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjectsCellsToGolgiPMSpots
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
RelateObjects:[module_num:37|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
    Parent objects:Cells
    Child objects:Mitochondria
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjectsCellsToMitochondria
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
ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Mitochondria|Intensity_IntegratedIntensityEdge_Mito,Mitochondria|Intensity_MinIntensityEdge_Mito,Mitochondria|Intensity_MedianIntensity_Mito,Mitochondria|Intensity_MassDisplacement_Mito,Mitochondria|Intensity_MaxIntensityEdge_Mito,Mitochondria|Intensity_LowerQuartileIntensity_Mito,Mitochondria|Intensity_UpperQuartileIntensity_Mito,Mitochondria|Intensity_MaxIntensity_Mito,Mitochondria|Intensity_StdIntensityEdge_Mito,Mitochondria|Intensity_MinIntensity_Mito,Mitochondria|Intensity_MADIntensity_Mito,Mitochondria|Intensity_IntegratedIntensity_Mito,Mitochondria|Intensity_MeanIntensityEdge_Mito,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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